---
API: 3
OpenSesame: 4.0.5
Platform: nt
---
set width 1440
set uniform_coordinates yes
set title "SlimStampen example"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set psychopy_waitblanking yes
set mouse_backend psycho
set keyboard_backend psycho
set height 900
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "C:/Users/Renée/Documents/user-models-group-project-user-s-next-top-model-master"
set disable_garbage_collection True
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background black

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run slimstampen_setup always
	run instructions always
	run new_1_sketchpad True
	run new_2_sketchpad True
	run new_3_sketchpad True
	run new_4_sketchpad True
	run new_5_sketchpad True
	run new_6_sketchpad True
	run learning_session_setup always
	run while_there_is_time_left always
	run new_sketchpad_1 always
	run new_inline_script_1 always
	run while_there_is_time_left_1 always
	run save_data always
	run new_sketchpad always

define sketchpad instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Welcome to Fun with Flags!" x=0 y=0 z_index=0
	draw fixdot color=white show_if=always style=default x=448 y=-768 z_index=0

define inline_script learning_session_setup
	set description "Executes Python code"
	___run__
	# Start the clock
	var.session_start_time = clock.time()
	
	# Session will run until time_up == True
	var.time_up = False
	
	var.break_needed = False
	var.bonus_time_up = False
	
	# Keep track of trial number
	var.trial_num = 1
	
	# Settings
	
	var.session_duration = 3600000 # an hour, total time with flags
	var.feedback_duration = 2000
	var.inter_trial_interval = 200
	var.block_time = 1200000 # how long between breaks
	var.next_break = 1200000 # set to same as block_time, updates itself later
	var.break_time_stamp = 0 
	__end__
	set _prepare ""

define sketchpad new_1_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="You will be asked to memorize and recall the name of the flag that is presented to you.<br /><br />The first time you encounter a flag, its name will be presented to you." x=0 y=0 z_index=0

define sketchpad new_2_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="Unless you answer incorrectly, the name will not be repeated to you." x=0 y=0 z_index=0

define sketchpad new_3_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="Please mind your spelling! Misspelled flags will be considered as incorrect." x=0 y=0 z_index=0

define sketchpad new_4_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="Please try to answer as accurately as possible!" x=0 y=0 z_index=0

define sketchpad new_5_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="During this session, you may be presented with some breaks.<br /><br />The breaks will be indicated on your screen. <br /><br />During these breaks, you are free to do whatever you like. <br /><br />Please inform your instructors that you are having a break. They will time it for you.<br /><br />	<br /><br /><br />" x=0 y=0 z_index=0

define sketchpad new_6_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="After this screen the experiment will start.<br /><br />If you have any questions, please ask your instructors now.<br /><br />When you're ready, press enter.<br /><br />Good luck and have fun !" x=0 y=0 z_index=0

define inline_script new_inline_script
	set description "Executes Python code"
	set _run ""
	set _prepare ""

define inline_script new_inline_script_1
	set description "Executes Python code"
	set _run "var.test_time = var.session_duration + 600000"
	set _prepare ""

define sketchpad new_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Thank You! The experiment is now over." x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="" x=-192 y=-64 z_index=0

define sketchpad new_sketchpad_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Break time!<br /><br />Please inform the instructors that you are ready for the final part of the experiment.<br /><br />You are now free to do whatever you like for the time being.<br /><br />The instructors will inform you when it is time to start again." x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="" x=-192 y=-64 z_index=0

define inline_script present_trial
	set description "Executes Python code"
	___run__
	trial_start_time = clock.time()
	
	# Get next fact from the model
	next_fact, new = m.get_next_fact(current_time = trial_start_time)
	prompt = next_fact.question
	answer = next_fact.answer
									
	# Show prompt
	my_canvas = Canvas(background_color='#1A1A1A')
	my_canvas.image(pool[prompt])
	if new:
		my_canvas.text(answer, y = -300, font_size = 30)
	my_canvas.prepare()
	my_canvas.show()
	
	# Listen for keyboard input and show keypresses on screen as they occur
	my_keyboard = Keyboard()
	keyboard_response = ""
	erased_answer = False
	rt = float("inf")
	
	# Keep listening for key presses until the user presses Enter
	while True:
		key, time = my_keyboard.get_key()
		
		# The first keypress determines the response time
		if keyboard_response == "" and not erased_answer:
			rt = clock.time() - trial_start_time
		
		if key == "return":
			break
			
		if key == "backspace":
			keyboard_response = keyboard_response[:-1]
			# If the answer is completely erased, the RT is no longer informative
			if keyboard_response == "":
				erased_answer = True
				rt = float("inf")
		
		elif key == "space":
			keyboard_response += " "
			
		elif len(key) > 1:
			keyboard_response += ""
		
		else:
			keyboard_response += key
	
		# Update what's on screen'
		my_canvas.clear()
		my_canvas.image(pool[prompt])
		if new:
			my_canvas.text(answer, y = -300, font_size = 30)
		my_canvas.text(keyboard_response, y = 300, font_size = 30)
		my_canvas.prepare()
		my_canvas.show()
	
	
	# Check if the response is correct
	correct = keyboard_response == answer
	newAlpha = m.get_rate_of_forgetting(time = trial_start_time, fact = next_fact)
	
	result = df[df['facts'] == prompt]['alpha1']
	if not result.empty:
	    previousAlpha = result.values[0]
	
	if not result.empty:
	    # Update the alpha value
	    df.loc[df['facts'] == prompt, 'alpha'] = newAlpha
	
	result = df[df['facts'] == prompt]['alpha2']
	if not result.empty:
	    previousAlpha2 = result.values[0]
	
	if not result.empty:
	    # Update the alpha value
	    df.loc[df['facts'] == prompt, 'alpha'] = previousAlpha
	
	result = df[df['facts'] == prompt]['alpha3']
	if not result.empty:
	    previousAlpha3 = result.values[0]
	
	if not result.empty:
	    # Update the alpha value
	    df.loc[df['facts'] == prompt, 'alpha'] = previousAlpha2
	
	rollingav = (previousAlpha + previousAlpha2 + previousAlpha3)/3
	newrollingav = (newAlpha + previousAlpha + previousAlpha2)/3
	
	difference = rollingav - newrollingav
	print("The alpha has changed by", difference)
	
	# Log response
	response = Response(next_fact, trial_start_time, rt, correct)
	m.register_response(response) 
	
	# Show feedback
	feedback_color = "green" if correct else "red"
	my_canvas.text(keyboard_response, y = 300, color = feedback_color, font_size = 30)
	if not correct:
		my_canvas.text(answer, y = -300, font_size = 30)
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(var.feedback_duration)
	
	# Clear the screen between trials
	my_canvas.clear()
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(var.inter_trial_interval)
	
	# Check if time is up
	if clock.time() - var.session_start_time >= var.session_duration:
		print("session ends: " + str(clock.time()/60000))
		var.time_up = 'yes'
	
	
	# check if mentally fatigued
	if difference < 0:
		sqrdiff = difference**2
		if sqrdiff >= 0.0015:
			print(f"The alpha value for fact {prompt} has been changed by {difference}")
			#If it has been at least 10 minutes after the last break (of 5 min), a new break can be proposed.
			if clock.time() >= break_time_stamp + 900000:
				var.break_time_stamp = clock.time()
				var.break_needed = 'yes'
	
	# Break
	if var.break_needed == 'yes':
		my_canvas.clear()
		my_canvas.text("Break time! Please inform your instructors that you are having a break. They will time it for you. You are now free to do whatever you like for the time being.", y = 0, font_size = 50)
		my_canvas.prepare()
		my_canvas.show()
		break_start_time = clock.time()
		while True:
			key, time = my_keyboard.get_key()
			if key == "return":
				break
		break_duration = clock.time() - break_start_time
		var.session_duration += break_duration
		var.break_needed = False
		print("break ended at: " + str(clock.time()/60000))
		
	# Increment trial number
	var.trial_num += 1
	__end__
	set _prepare ""

define inline_script present_trial_1
	set description "Executes Python code"
	___run__
	trial_start_time = clock.time()
	
	# Get next fact from the model
	next_fact, new = m.get_next_fact(current_time = trial_start_time)
	prompt = next_fact.question
	answer = next_fact.answer
	
	# Show prompt
	
	my_canvas = Canvas(background_color='#1A1A1A')
	my_canvas.image(pool[prompt])
	if new:
		my_canvas.text(answer, y = -300, font_size = 30)
	my_canvas.prepare()
	my_canvas.show()
	
	# Listen for keyboard input and show keypresses on screen as they occur
	my_keyboard = Keyboard()
	keyboard_response = ""
	erased_answer = False
	rt = float("inf")
	
	# Keep listening for key presses until the user presses Enter
	while True:
		key, time = my_keyboard.get_key()
		
		# The first keypress determines the response time
		if keyboard_response == "" and not erased_answer:
			rt = clock.time() - trial_start_time
		
		if key == "return":
			break
			
		if key == "backspace":
			keyboard_response = keyboard_response[:-1]
			# If the answer is completely erased, the RT is no longer informative
			if keyboard_response == "":
				erased_answer = True
				rt = float("inf")
		
		elif key == "space":
			keyboard_response += " "
			
		elif len(key) > 1:
			keyboard_response += ""
		
		else:
			keyboard_response += key
	
		# Update what's on screen'
		my_canvas.clear()
		my_canvas.image(pool[prompt])
		if new:
			my_canvas.text(answer, y = -300, font_size = 30)
		my_canvas.text(keyboard_response, y = 300, font_size = 30)
		my_canvas.prepare()
		my_canvas.show()
	
	# Check if the response is correct
	correct = keyboard_response == answer
	
	# Log response
	response = Response(next_fact, trial_start_time, rt, correct)
	m.register_response(response) 
	
	# Show feedback
	feedback_color = "green" if correct else "red"
	my_canvas.text(keyboard_response, y = 300, color = feedback_color, font_size = 30)
	if not correct:
		my_canvas.text(answer, y = -300, font_size = 30)
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(var.feedback_duration)
	
	# Clear the screen between trials
	my_canvas.clear()
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(var.inter_trial_interval)
	
	# Check if bonus session time is up
	if clock.time() - var.session_start_time >= var.test_time:
		print("test ends: " + str(clock.time()/60000))
		var.bonus_time_up = 'yes'
		
	# Increment trial number
	var.trial_num += 1
	__end__
	set _prepare ""

define inline_script save_data
	set description "Executes Python code"
	___run__
	# Write the SlimStampen data to the OpenSesame log file
	dat = m.export_data()
	log.write(dat)
	__end__
	set _prepare ""

define inline_script slimstampen_setup
	set description "Executes Python code"
	___run__
	m = SpacingModel()
	
	# Add some study facts to the model (you could also read them from a CSV file)
	
	facts = []
	
	df = pd.read_csv(pool['countryFlag.csv'])
	
	for index, row in df.iterrows():
		facts.append(Fact(index,row[0],row[1].lower()))
	
	random.shuffle(facts)
	df['alpha1'] = 0.3
	df['alpha2'] = 0.3
	df['alpha3'] = 0.3
	
	for fact in facts:
		m.add_fact(fact)
	__end__
	___prepare__
	from __future__ import division
	import math
	import random
	import pandas as pd
	from collections import namedtuple
	
	Fact = namedtuple("Fact", "fact_id, question, answer")
	Response = namedtuple("Response", "fact, start_time, rt, correct")
	Encounter = namedtuple("Encounter", "activation, time, reaction_time, decay")
	
	
	class SpacingModel(object):
	
	    # Model constants
	    LOOKAHEAD_TIME = 15000
	    FORGET_THRESHOLD = -0.8
	    DEFAULT_ALPHA = 0.3
	    C = 0.25
	    F = 1.0
	
	    def __init__(self):
	        self.facts = []
	        self.responses = []
	
	    def add_fact(self, fact):
	        # type: (Fact) -> None
	        """
	        Add a fact to the list of study items.
	        """
	        # Ensure that a fact with this ID does not exist already
	        if next((f for f in self.facts if f.fact_id == fact.fact_id), None):
	            raise RuntimeError(
	                "Error while adding fact: There is already a fact with the same ID: {}. Each fact must have a unique ID".format(fact.fact_id))
	
	        self.facts.append(fact)
	
	
	    def register_response(self, response):
	        # type: (Response) -> None
	        """
	        Register a response.
	        """
	        # Prevent duplicate responses
	        if next((r for r in self.responses if r.start_time == response.start_time), None):
	            raise RuntimeError(
	                "Error while registering response: A response has already been logged at this start_time: {}. Each response must occur at a unique start_time.".format(response.start_time))
	
	        self.responses.append(response)
	
	
	    def get_next_fact(self, current_time):
	        # type: (int) -> (Fact, bool)
	        """
	        Returns a tuple containing the fact that needs to be repeated most urgently and a boolean indicating whether this fact is new (True) or has been presented before (False).
	        If none of the previously studied facts needs to be repeated right now, return a new fact instead.
	        """
	        # Calculate all fact activations in the near future
	        fact_activations = [(f, self.calculate_activation(current_time + self.LOOKAHEAD_TIME, f)) for f in self.facts]
	
	        seen_facts = [(f, a) for (f, a) in fact_activations if a > -float("inf")]
	        not_seen_facts = [(f, a) for (f, a) in fact_activations if a == -float("inf")]
	
	        # Prevent an immediate repetition of the same fact
	        if len(seen_facts) > 2:
	            last_response = self.responses[-1]
	            seen_facts = [(f, a) for (f, a) in seen_facts if f.fact_id != last_response.fact.fact_id]
	
	        # Reinforce the weakest fact with an activation below the threshold
	        seen_facts_below_threshold = [(f, a) for (f, a) in seen_facts if a < self.FORGET_THRESHOLD]
	        if len(not_seen_facts) == 0 or len(seen_facts_below_threshold) > 0:
	            weakest_fact = min(seen_facts, key = lambda t: t[1])
	            return((weakest_fact[0], False))
	
	        # If none of the previously seen facts has an activation below the threshold, return a new fact
	        return((not_seen_facts[0][0], True))
	
	
	    def get_rate_of_forgetting(self, time, fact):
	        # type: (int, Fact) -> float
	        """
	        Return the estimated rate of forgetting of the fact at the specified time
	        """
	        encounters = []
	
	        responses_for_fact = [r for r in self.responses if r.fact.fact_id == fact.fact_id and r.start_time < time]
	        alpha = self.DEFAULT_ALPHA
	
	        # Calculate the activation by running through the sequence of previous responses
	        for response in responses_for_fact:
	            activation = self.calculate_activation_from_encounters(encounters, response.start_time)
	            encounters.append(Encounter(activation, response.start_time, self.normalise_reaction_time(response), self.DEFAULT_ALPHA))
	            alpha = self.estimate_alpha(encounters, activation, response, alpha)
	
	            # Update decay estimates of previous encounters
	            encounters = [encounter._replace(decay = self.calculate_decay(encounter.activation, alpha)) for encounter in encounters]
	
	        return(alpha)
	
	
	    def calculate_activation(self, time, fact):
	        # type: (int, Fact) -> float
	        """
	        Calculate the activation of a fact at the given time.
	        """
	
	        encounters = []
	
	        responses_for_fact = [r for r in self.responses if r.fact.fact_id == fact.fact_id and r.start_time < time]
	        alpha = self.DEFAULT_ALPHA
	
	        # Calculate the activation by running through the sequence of previous responses
	        for response in responses_for_fact:
	            activation = self.calculate_activation_from_encounters(encounters, response.start_time)
	            encounters.append(Encounter(activation, response.start_time, self.normalise_reaction_time(response), self.DEFAULT_ALPHA))
	            alpha = self.estimate_alpha(encounters, activation, response, alpha)
	
	            # Update decay estimates of previous encounters
	            encounters = [encounter._replace(decay = self.calculate_decay(encounter.activation, alpha)) for encounter in encounters]
	
	        return(self.calculate_activation_from_encounters(encounters, time))
	
	
	    def calculate_decay(self, activation, alpha):
	        # type: (float, float) -> float
	        """
	        Calculate activation-dependent decay
	        """
	        return self.C * math.exp(activation) + alpha
	
	
	    def estimate_alpha(self, encounters, activation, response, previous_alpha):
	        # type: ([Encounter], float, Response, float) -> float
	        """
	        Estimate the rate of forgetting parameter (alpha) for an item.
	        """
	        if len(encounters) < 3:
	            return(self.DEFAULT_ALPHA)
	
	        a_fit = previous_alpha
	        reading_time = self.get_reading_time(response.fact.question)
	        estimated_rt = self.estimate_reaction_time_from_activation(activation, reading_time)
	        est_diff = estimated_rt - self.normalise_reaction_time(response)
	
	        if est_diff < 0:
	            # Estimated RT was too short (estimated activation too high), so actual decay was larger
	            a0 = a_fit
	            a1 = a_fit + 0.05
	        
	        else:
	            # Estimated RT was too long (estimated activation too low), so actual decay was smaller
	            a0 = a_fit - 0.05
	            a1 = a_fit
	
	        # Binary search between previous fit and proposed alpha
	        for _ in range(6):
	            # Adjust all decays to use the new alpha
	            a0_diff = a0 - a_fit
	            a1_diff = a1 - a_fit
	            d_a0 = [e._replace(decay = e.decay + a0_diff) for e in encounters]
	            d_a1 = [e._replace(decay = e.decay + a1_diff) for e in encounters]
	
	            # Calculate the reaction times from activation and compare against observed RTs
	            encounter_window = encounters[max(1, len(encounters) - 5):]
	            total_a0_error = self.calculate_predicted_reaction_time_error(encounter_window, d_a0, reading_time)
	            total_a1_error = self.calculate_predicted_reaction_time_error(encounter_window, d_a1, reading_time)
	
	            # Adjust the search area based on the lowest total error
	            ac = (a0 + a1) / 2
	            if total_a0_error < total_a1_error:
	                a1 = ac
	            else:
	                a0 = ac
	        
	        # The new alpha estimate is the average value in the remaining bracket
	        return((a0 + a1) / 2)
	
	
	    def calculate_activation_from_encounters(self, encounters, current_time):
	        # type: ([Encounter], int) -> float
	        included_encounters = [e for e in encounters if e.time < current_time]
	
	        if len(included_encounters) == 0:
	            return(-float("inf"))
	
	        return(math.log(sum([math.pow((current_time - e.time) / 1000, -e.decay) for e in included_encounters])))
	
	
	    def calculate_predicted_reaction_time_error(self, test_set, decay_adjusted_encounters, reading_time):
	        # type: ([Encounter], [Encounter], Fact) -> float
	        """
	        Calculate the summed absolute difference between observed response times and those predicted based on a decay adjustment.
	        """
	        activations = [self.calculate_activation_from_encounters(decay_adjusted_encounters, e.time - 100) for e in test_set]
	        rt = [self.estimate_reaction_time_from_activation(a, reading_time) for a in activations]
	        rt_errors = [abs(e.reaction_time - rt) for (e, rt) in zip(test_set, rt)]
	        return(sum(rt_errors))
	
	
	    def estimate_reaction_time_from_activation(self, activation, reading_time):
	        # type: (float, int) -> float
	        """
	        Calculate an estimated reaction time given a fact's activation and the expected reading time 
	        """
	        return((self.F * math.exp(-activation) + (reading_time / 1000)) * 1000)
	
	
	    def get_max_reaction_time_for_fact(self, fact):
	        # type: (Fact) -> float
	        """
	        Return the highest response time we can reasonably expect for a given fact
	        """
	        reading_time = self.get_reading_time(fact.question)
	        max_rt = 1.5 * self.estimate_reaction_time_from_activation(self.FORGET_THRESHOLD, reading_time)
	        return(max_rt)
	
	
	    def get_reading_time(self, text):
	        # type: (str) -> float
	        """
	        Return expected reading time in milliseconds for a given string
	        """
	        word_count = len(text.split())
	
	        if word_count > 1:
	            character_count = len(text)
	            return(max((-157.9 + character_count * 19.5), 300))
	        
	        return(300)
	
	    
	    def normalise_reaction_time(self, response):
	        # type: (Response) -> float
	        """
	        Cut off extremely long responses to keep the reaction time within reasonable bounds
	        """
	        rt = response.rt if response.correct else 60000
	        max_rt = self.get_max_reaction_time_for_fact(response.fact)
	        return(min(rt, max_rt))
	
	
	    def export_data(self, path = None):
	        # type: (str) -> DataFrame
	        """
	        Save the response data to the specified csv file, and return a copy of the pandas DataFrame.
	        If no path is specified, return a CSV-formatted copy of the data instead.
	        """
	
	        def calc_rof(row):
	            return(self.get_rate_of_forgetting(row["start_time"] + 1, row["fact"]))
	
	        dat_resp = pd.DataFrame(self.responses)
	        dat_facts = pd.DataFrame([r.fact for r in self.responses])
	        dat = pd.concat([dat_resp, dat_facts], axis = 1)
	
	        # Add column for rate of forgetting estimate after each observation
	        dat["alpha"] = dat.apply(calc_rof, axis = 1)
	        dat.drop(columns = "fact", inplace = True)
	
	        # Add trial number column
	        dat.index.name = "trial"
	        dat.index = dat.index + 1
	
	        # Save to CSV file if a path was specified, otherwise return the CSV-formatted output
	        if path is not None:
	            dat.to_csv(path, encoding="UTF-8")
	            return(dat)
	        
	        return(dat.to_csv())
	__end__

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run present_trial always

define sequence trial_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run present_trial_1 always

define loop while_there_is_time_left
	set source_file ""
	set source table
	set repeat 1000
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[time_up] = yes"
	setcycle 0 ignore_this_variable 1
	run trial_sequence

define loop while_there_is_time_left_1
	set source_file ""
	set source table
	set repeat 1000
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[bonus_time_up] = yes"
	setcycle 0 ignore_this_variable 1
	run trial_sequence_1

